PsychoPy2experiment version="1.75.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = timing_visual
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    ImageComponent fixation
      stopVal [duration (frames)] = 30
      startVal [time (s)] = 0.0
      image = media/cross.png
      size = [2, 2]
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    ImageComponent img_1
      stopVal [duration (frames)] = $length_1_frames
      startVal [frame N] = 31
      image = media/red_square.jpg
      size = [0.5, 0.5]
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    ImageComponent wait
      stopVal [duration (frames)] = 60
      startVal [condition] = $img_1.status==FINISHED
      size = [0,0]
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    ImageComponent img_2
      stopVal [duration (frames)] = $length_2_frames
      startVal [condition] = $wait.status==FINISHED
      image = media/red_square.jpg
      size = [0.5, 0.5]
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    KeyboardComponent key_resp
      correctAns = $correct
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [condition] = $img_2.status==FINISHED
      store = first key
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  Routine instruction
    TextComponent text
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.095
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      text:
        In this experiment you will see two squares.

        Before the first image you will see a fixation cross to warn you that the
        first square is about to appear.

        Your task is to compare the duration of time the squares appeared and determine which square appeared for the shortest amount of time.

        If you believe the first square was shorter, press 1.  If you believe the second square was shorter, press 2.

        Press the spacebar to continue.
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 15
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.112, u'stim': u'media/stim2.wav', u'trial_num': 2, u'length_2_frames': 6, u'length_1_frames': 7, u'length_2_time': 0.096000000000000002, u'num_trials_presented': 5, u'correct': 2},
      {u'length_1_time': 0.112, u'stim': u'media/stim2.wav', u'trial_num': 2, u'length_2_frames': 6, u'length_1_frames': 7, u'length_2_time': 0.096000000000000002, u'num_trials_presented': 5, u'correct': 2}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
    Routine trial
  LoopTerminator trials
