PsychoPy2experiment version="1.75.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = timingtask
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = .4
      startVal [time (s)] = 0.0
      image = media/cross.png
      size = [2,2]
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    KeyboardComponent key_resp
      correctAns = $correct
      storeCorrect = True
      stopVal [duration (s)] = 3.5
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 1.8
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    SoundComponent sound_1
      sound [set every repeat] = $stim
      stopVal [duration (s)] = 2.3
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent text
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.09
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      text:
        In this experiment, you will hear two tones.

        Before the first tone you will see a fixation cross to warn you that the first tone is about to play.

        Your task is to compare the duration of time the tones each played and determine which tone was played for the shortest amount of time.

        If you believe the first tone was shorter, press 1.  If you believe the second tone was shorter, press 2.

        Press the spacebar when you are ready to begin.
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 15
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.096000000000000002, u'stim': u'media/stim1.wav', u'trial_num': 1, u'length_2_frames': 7, u'length_1_frames': 6, u'length_2_time': 0.112, u'num_trials_presented': 5, u'correct': 1},
      {u'length_1_time': 0.112, u'stim': u'media/stim2.wav', u'trial_num': 2, u'length_2_frames': 6, u'length_1_frames': 7, u'length_2_time': 0.096000000000000002, u'num_trials_presented': 5, u'correct': 2},
      {u'length_1_time': 0.112, u'stim': u'media/stim2.wav', u'trial_num': 2, u'length_2_frames': 6, u'length_1_frames': 7, u'length_2_time': 0.096000000000000002, u'num_trials_presented': 5, u'correct': 2}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
    Routine trial
  LoopTerminator trials
